<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Metadata</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>Devices</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>ClockSynchronizer</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="PortName" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:ClockSynchronizer.bonsai">
                          <PortName>COM1</PortName>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>VideoController</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="PortName" />
                          <Property Name="GlobalTriggerFrequency" />
                          <Property Name="LocalTriggerFrequency" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:CameraController.bonsai">
                          <PortName>COM2</PortName>
                          <GlobalTriggerFrequency>50</GlobalTriggerFrequency>
                          <LocalTriggerFrequency>125</LocalTriggerFrequency>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>CameraTop</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="SerialNumber" />
                          <Property Name="Gain" />
                          <Property Name="Binning" />
                          <Property Name="ExposureTime" />
                          <Property Name="TriggerSource" />
                          <Property Name="FrameEvents" />
                          <Property Name="TriggerFrequency" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:SpinnakerVideoSource.bonsai">
                          <TriggerSource>GlobalTrigger</TriggerSource>
                          <TriggerFrequency>GlobalTriggerFrequency</TriggerFrequency>
                          <ExposureTime>5000</ExposureTime>
                          <SerialNumber>12345678</SerialNumber>
                          <Gain>0</Gain>
                          <Binning>1</Binning>
                          <FrameEvents>CameraTop</FrameEvents>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>CameraPatch1</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="SerialNumber" />
                          <Property Name="Gain" />
                          <Property Name="Binning" />
                          <Property Name="ExposureTime" />
                          <Property Name="TriggerSource" />
                          <Property Name="FrameEvents" />
                          <Property Name="TriggerFrequency" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:SpinnakerVideoSource.bonsai">
                          <TriggerSource>LocalTrigger</TriggerSource>
                          <TriggerFrequency>LocalTriggerFrequency</TriggerFrequency>
                          <ExposureTime>3000</ExposureTime>
                          <SerialNumber>23456789</SerialNumber>
                          <Gain>0</Gain>
                          <Binning>2</Binning>
                          <FrameEvents>CameraPatch1</FrameEvents>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>Patch1</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="PortName" />
                          <Property Name="WheelDisplacement" />
                          <Property Name="PelletDelivered" />
                          <Property Name="DeliverPellet" />
                          <Property Name="PatchEvents" />
                          <Property Name="Radius" />
                          <Property Name="SampleRate" />
                          <Property Name="ResetFeeder" />
                          <Property Name="DueTime" />
                          <Property Name="Count" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Aeon.Foraging:UndergroundFeeder.bonsai">
                          <PatchEvents>Patch1Events</PatchEvents>
                          <SampleRate>SampleRate500Hz</SampleRate>
                          <DeliverPellet>Patch1DeliverPellet</DeliverPellet>
                          <PelletDelivered>Patch1PelletDelivered</PelletDelivered>
                          <DueTime>PT1S</DueTime>
                          <Count>3</Count>
                          <ResetFeeder>Patch1ResetFeeder</ResetFeeder>
                          <PortName>COM3</PortName>
                          <Radius>-4</Radius>
                          <WheelDisplacement>Patch1WheelDisplacement</WheelDisplacement>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                </Nodes>
                <Edges />
              </Workflow>
            </Expression>
          </Nodes>
          <Edges />
        </Workflow>
      </Expression>
    </Nodes>
    <Edges />
  </Workflow>
</WorkflowBuilder>